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Source:Signal%20Properties int SourceCh= 16 // number of digitized and stored channels (allow_override)
Source:Signal%20Properties int SampleBlockSize= 32 // number of samples transmitted at a time (allow_override)
Source:Signal%20Properties int SamplingRate= 256 // sampling rate (allow_override)
Source:Signal%20Properties list ChannelNames= 16 Fp1 Fp2 F3 Fz F4 FC1 FC2 C3 Cz C4 CP1 CPz CP2 P3 Pz P4 // list of channel names (allow_override)
Source:Signal%20Properties list SourceChOffset= 16 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 // Offset for channels in A/D units (allow_override)
Source:Signal%20Properties list SourceChGain= 16 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 // gain for each channel (A/D units per physical unit) (allow_override)
Storage:Data%20Location string DataDirectory= C:/Users/L03579841/Desktop/bcipy/Experiment-Totoro/dat_bci ..\data % % // path to top level data directory (directory)
Storage:Session string SubjectName= Name Name % % // subject alias
Storage:Session string SubjectSession= 001 001 % % // three-digit session number
Storage:Session string SubjectRun= 00 00 % % // two-digit run number
Storage:Documentation string ID_System= % // BCI2000 System Code
Storage:Documentation string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation string ID_Montage= % // BCI2000 Cap Montage Code
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Source:gUSBamp int AcquisitionMode= 0 0 0 2 // data acquisition mode:  0: analog signal acquisition, 1: calibration signal, 2: impedance measurement (enumeration)
Source:gUSBamp int CommonGround= 1 0 0 1 // internally connect GNDs from all blocks:  0: false, 1: true (enumeration)
Source:gUSBamp int CommonReference= 1 0 0 1 // internally connect Refs from all blocks:  0: false, 1: true (enumeration)
Source:gUSBamp int EnableDigitalInput= 1 0 0 1 // enable digital inputs (boolean)
Source:gUSBamp int EnableDigitalOutput= 0 0 0 3 // enable digital output on block acquisition:  0: off, 1: use expressions %28after signal acquisition%29, 2: timing test, 3: use expressions %28before signal acquisition%29 (enumeration)
Source:gUSBamp matrix DigitalOutputEx= 0 { Expression } // Matrix of Expressions for digital output
Source:gUSBamp int DetectDataLoss= 0 0 0 1 // use gUSBamp counter mode to detect data loss (boolean)
Source:gUSBamp int NumBuffers= auto 5 2 % // IO queue length
Source:Buffering int SourceBufferSize= 2s 2s % % // size of data acquisition ring buffer (in blocks or seconds)
Source:gUSBamp list DeviceIDs= 1 auto // list of USBamps to be used (or auto)
Source:gUSBamp string DeviceIDMaster= auto // deviceID for the device whose SYNC goes to the slaves
Source:gUSBamp intlist SourceChList= 1 auto // list of channels to digitize, in terms of physical inputs numbered across all devices
Source:gUSBamp intlist SourceChDevices= 1 auto // number of digitized channels per device
Source:gUSBamp int FilterEnabled= 1 1 0 1 // Enable pass band filter (0=no, 1=yes)
Source:gUSBamp float FilterHighPass= 0.1Hz 0.1 0 50 // high pass filter for pass band
Source:gUSBamp float FilterLowPass= 70Hz 60 0 4000 // low pass filter for pass band
Source:gUSBamp int FilterModelOrder= 8 8 1 12 // filter model order for pass band
Source:gUSBamp int FilterType= 1 1 1 2 // filter type for pass band (1=BUTTERWORTH, 2=CHEBYSHEV)
Source:gUSBamp int NotchEnabled= 1 1 0 1 // Enable notch (0=no, 1=yes)
Source:gUSBamp float NotchHighPass= 58 58 0 70 // high pass filter for notch filter
Source:gUSBamp float NotchLowPass= 62 62 0 4000 // low pass filter for notch filter
Source:gUSBamp int NotchModelOrder= 4 4 1 10 // filter model order for notch filter
Source:gUSBamp int NotchType= 1 1 1 2 // filter type for pass band (1=CHEBYSHEV, 2=BUTTERWORTH)
Storage:BCI2000FileWriter string FileFormat= dat // format of data file (readonly)
Storage:Documentation string StorageTime= % // time of beginning of data storage
Storage:FileSplitting string FileSplittingCondition= % // when to split files, e.g. "1:25:00" or "1.5GB"
Source:Alignment int AlignChannels= 0 0 0 1 // align channels in time (0=no, 1=yes) (boolean)
Source:Alignment floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
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Source:Online%20Processing list TransmitChList= 1 * // list of transmitted channels: Channel names may contain * and ? wildcards,  and character ranges enclosed in []; wildcard patterns may be negated by prepending an exclamation mark.  Ranges of channels may be specified using : or - to separate begin from end.
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Storage:Data%20Location string DataFile= $%7bSubjectName%7d$%7bSubjectSession%7d/$%7bSubjectName%7dS$%7bSubjectSession%7dR$%7bSubjectRun%7d.$%7bFileFormat%7d // name of data file relative to DataDirectory
System:RunManager string DataFileShm= /jZnyq4mDCxZ0hvjU // name of shared memory object holding data file name (readonly)
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 gUSBampADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain (noedit)(readonly)
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Filtering:ExpressionFilter string StartRunExpression= % // expression executed on StartRun
Filtering:ExpressionFilter string StopRunExpression= % // expression executed on StopRun
Filtering:ExpressionFilter matrix Expressions= 0 1 // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
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System:Configuration matrix SignalProcessingFilterChain= 1 { Filter%20Name Position%20String } ExpressionFilter 2.D2 // SignalProcessing filter chain (noedit)(readonly)
Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Human%20Interface%20Devices string KeystrokeStateName= % // State to be translated into keystrokes (0-F), empty for off
Application:Human%20Interface%20Devices string KeystrokeExpression= % // Expression that evaluates to a virtual keycode, empty for off
Application:Human%20Interface%20Devices string KeystrokeExpressionOnStartRun= % // Expression that initializes expression variables on StartRun
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
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System:Configuration matrix ApplicationFilterChain= 3 { Filter%20Name Position%20String } ConnectorInput 2.9999 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain (noedit)(readonly)
System:Randomization int RandomSeed= 7459 0 % % // seed for the BCI2000 pseudo random number generator (readonly)
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
