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Source:Signal%20Properties int SourceCh= 32 // number of digitized and stored channels (allow_override)
Source:Signal%20Properties int SampleBlockSize= 32 // number of samples transmitted at a time (allow_override)
Source:Signal%20Properties int SamplingRate= 256 // sampling rate (allow_override)
Source:Signal%20Properties list ChannelNames= 32 Fp1 Fp2 F7 F3 Fz F4 F8 FC5 FC1 FC2 FC6 C3 Cz C4 T7 T8 CP5 CP1 CPz CP2 CP6 P7 P3 Pz P4 P8 PO7 PO3 PO4 PO8 O1 O2 // list of channel names (allow_override)
Source:Signal%20Properties list SourceChOffset= 32 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 // Offset for channels in A/D units (allow_override)
Source:Signal%20Properties list SourceChGain= 32 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 1 // gain for each channel (A/D units per physical unit) (allow_override)
Storage:Data%20Location string DataDirectory= C:/Users/L03579841/Desktop/bcipy/Experiment-Totoro/dat_bci ..\data % % // path to top level data directory (directory)
Storage:Session string SubjectName= Name Name % % // subject alias
Storage:Session string SubjectSession= 001 001 % % // three-digit session number
Storage:Session string SubjectRun= 00 00 % % // two-digit run number
Storage:Documentation string ID_System= % // BCI2000 System Code
Storage:Documentation string ID_Amp= % // BCI2000 Amp Code
Storage:Documentation string ID_Montage= % // BCI2000 Cap Montage Code
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Source:Buffering int SourceBufferSize= 2s 2s % % // size of data acquisition ring buffer (in blocks or seconds)
Source:Acquisition int AcquisitionMode= 0 0 0 2 // data acquisition mode:  0: analog signal acquisition, 1: calibration signal, 2: impedance measurement (enumeration)
Source:Acquisition list RefChList= 1 33 // reference channel for each amp, 0 or empty for unipolar measurement
Source:Acquisition int ActiveElectrodes= 0 0 0 1 // assume active electrodes for impedance measurement
Source:Acquisition int EnableDigitalInput= 1 0 0 1 // enable digital inputs (boolean)
Source:Acquisition int EnableSampleCounter= 0 0 0 1 // use sample counter to detect data loss (boolean)
Source:Acquisition int EnableHoldInput= 0 0 0 1 // enable hold input (boolean)
Source:Acquisition int IOQueueSize= auto auto 2 % // number of transfer requests to keep posted during acquisition
Source:Multiple%20Devices list DeviceIDs= 1 auto // list of devices to be used
Source:Multiple%20Devices string DeviceIDMaster= auto // deviceID for the device whose SYNC goes to the slaves
Source:Multiple%20Devices intlist SourceChList= 1 auto // list of channels to digitize, in terms of physical inputs numbered across all devices
Source:Multiple%20Devices intlist SourceChDevices= 1 auto // number of digitized channels per device
Source:DSP int FilterEnabled= 0 0 0 1 // Enable pass band filter (boolean)
Source:DSP float FilterHighPass= 0.1Hz // high pass filter for pass band
Source:DSP float FilterLowPass= 70Hz // low pass filter for pass band
Source:DSP int NotchEnabled= 0 0 0 1 // Enable notch filter (boolean)
Source:DSP float NotchFrequency= 60Hz // notch filter frequency
Storage:BCI2000FileWriter string FileFormat= dat // format of data file (readonly)
Storage:Documentation string StorageTime= % // time of beginning of data storage
Storage:FileSplitting string FileSplittingCondition= % // when to split files, e.g. "1:25:00" or "1.5GB"
Source:Alignment int AlignChannels= 0 0 0 1 // align channels in time (0=no, 1=yes) (boolean)
Source:Alignment floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
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Source:Online%20Processing list TransmitChList= 1 * // list of transmitted channels: Channel names may contain * and ? wildcards,  and character ranges enclosed in []; wildcard patterns may be negated by prepending an exclamation mark.  Ranges of channels may be specified using : or - to separate begin from end.
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Storage:Data%20Location string DataFile= $%7bSubjectName%7d$%7bSubjectSession%7d/$%7bSubjectName%7dS$%7bSubjectSession%7dR$%7bSubjectRun%7d.$%7bFileFormat%7d // name of data file relative to DataDirectory
System:RunManager string DataFileShm= /SsuVeweE9ZI6TpJs // name of shared memory object holding data file name (readonly)
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 gHIampADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain (noedit)(readonly)
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Filtering:ExpressionFilter string StartRunExpression= % // expression executed on StartRun
Filtering:ExpressionFilter string StopRunExpression= % // expression executed on StopRun
Filtering:ExpressionFilter matrix Expressions= 0 1 // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
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System:Configuration matrix SignalProcessingFilterChain= 1 { Filter%20Name Position%20String } ExpressionFilter 2.D2 // SignalProcessing filter chain (noedit)(readonly)
Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Application:Application%20Window int WindowWidth= 640 640 0 % // width of Application window
Application:Application%20Window int WindowHeight= 480 480 0 % // height of Application window
Application:Application%20Window int WindowLeft= 0 0 % % // screen coordinate of Application window's left edge
Application:Application%20Window int WindowTop= 0 0 % % // screen coordinate of Application window's top edge
Application:Application%20Window int WindowFullscreen= 0 0 0 1 // Application window fullscreen mode (boolean)
Application:Application%20Window string WindowBackgroundColor= 0x000000 0x505050 % % // Application window background color (color)(allow_override)
Application:Application%20Window string WindowHideCursor= 1 0 0 1 // hide cursor when mouse is over Application window (boolean)
Application:Application%20Window matrix WindowInfo= 1 1 auto // Application window information (readonly)(noedit)
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Application:AudioPlayback int AudioPlaybackOn= auto 0 0 1 // switch audio playback on
Application:AudioPlayback float AudioPlaybackRate= auto // audio playback sampling rate
Application:AudioPlayback int AudioPlaybackChannels= auto // number of playback output channels
Application:AudioPlayback float AudioPlaybackBufferDuration= auto // duration of playback buffer
Visualize:Application%20Log int ShowAppLog= 1 0 0 1 // Show application log window (boolean)
Application:Sequencing float PreRunDuration= 2s 2s 0 % // duration of pause preceding first trial
Application:Sequencing float PreFeedbackDuration= 2s 2s 0 % // duration of target display prior to feedback
Application:Sequencing float FeedbackDuration= 3s 3s 0 % // duration of feedback
Application:Sequencing float PostFeedbackDuration= 1s 1s 0 % // duration of result display after feedback
Application:Sequencing float ITIDuration= 1s 1s 0 % // duration of inter-trial interval
Application:Sequencing float MinRunLength= 120s 120s 0 % // minimum duration of a run; if blank, NumberOfTrials is used
Application:Sequencing int NumberOfTrials= % 0 0 % // number of trials; if blank, MinRunLength is used
Application:Targets int NumberTargets= 2 2 0 255 // number of targets
Application:Targets intlist TargetSequence= 0 1 % % // fixed sequence in which targets should be presented (leave empty for random)
Application:Window int RenderingQuality= 1 0 0 1 // rendering quality: 0: low, 1: high (enumeration)
Application:Sequencing float MaxFeedbackDuration= 3s % 0 % // abort a trial after this amount of feedback time has expired
Application:3DEnvironment floatlist CameraPos= 3 50 50 150 // camera position vector in percent coordinates of 3D area
Application:3DEnvironment floatlist CameraAim= 3 50 50 50 // camera aim point in percent coordinates
Application:3DEnvironment int CameraProjection= 0 0 0 2 // projection type: 0: flat, 1: wide angle perspective, 2: narrow angle perspective (enumeration)
Application:3DEnvironment floatlist LightSourcePos= 3 50 50 100 // light source position in percent coordinates
Application:3DEnvironment int LightSourceColor= 0x808080 // light source RGB color (color)
Application:3DEnvironment int WorkspaceBoundaryColor= 0xffffff 0 % % // workspace boundary color (0xff000000 for invisible) (color)
Application:3DEnvironment string WorkspaceBoundaryTexture= images/grid.bmp // path of workspace boundary texture (inputfile)
Application:Cursor float CursorWidth= 10 10 0.0 % // feedback cursor width in percent of screen width
Application:Cursor int CursorColorFront= 0xff0000 // cursor color when it is at the front of the workspace (color)
Application:Cursor int CursorColorBack= 0xffff00 // cursor color when it is in the back of the workspace (color)
Application:Cursor string CursorTexture= images/marble.bmp // path of cursor texture (inputfile)
Application:Cursor floatlist CursorPos= 3 50 50 50 // cursor starting position
Application:Targets matrix Targets= 5 { pos%20x pos%20y pos%20z width%20x width%20y width%20z } 35 35 50 8 8 8 65 35 50 8 8 8 35 65 50 8 8 8 65 65 50 8 8 8 0 0 4 8 8 8 // target positions and widths in percentage coordinates
Application:Targets int TargetColor= 0x808080 // target color (color)
Application:Targets string TargetTexture= % // path of target texture (inputfile)
Application:Targets int TestAllTargets= 0 0 0 1 // test all targets for cursor collision? 0: test only the visible current target, 1: test all targets (enumeration)
Application:Human%20Interface%20Devices string KeystrokeStateName= % // State to be translated into keystrokes (0-F), empty for off
Application:Human%20Interface%20Devices string KeystrokeExpression= % // Expression that evaluates to a virtual keycode, empty for off
Application:Human%20Interface%20Devices string KeystrokeExpressionOnStartRun= % // Expression that initializes expression variables on StartRun
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
Application:Localization string Language= Default Default % % // Language for user messages
Application:Localization matrix LocalizedStrings= { German } { Timeout Be%20prepared%20... } Inaktiv Achtung%20... // Localized user messages
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System:Configuration matrix ApplicationFilterChain= 4 { Filter%20Name Position%20String } ConnectorInput 2.9999 CursorFeedbackTask 3 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain (noedit)(readonly)
System:Randomization int RandomSeed= 21676 0 % % // seed for the BCI2000 pseudo random number generator (readonly)
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
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